# Generated by Configurator on Thu Apr 21 13:10:26 EDT 2022

# Reset
Property,Core,Initialize,0

# Devices
Device,COM4,SerialManager,COM4
Device,XYStage,Prior,XYStage

# Pre-init settings for devices
Property,XYStage,Port,COM4

# Pre-init settings for COM ports
Property,COM4,AnswerTimeout,500.0000
Property,COM4,BaudRate,9600
Property,COM4,DTR,Disable
Property,COM4,DataBits,8
Property,COM4,DelayBetweenCharsMs,0.0000
Property,COM4,Fast USB to Serial,Disable
Property,COM4,Handshaking,Off
Property,COM4,Parity,None
Property,COM4,StopBits,1
Property,COM4,Verbose,1

# Hub (parent) references

# Initialize
Property,Core,Initialize,1

# Delays

# Focus directions

# Roles
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels

# Configuration presets
# Group: Channel

# Group: System
# Preset: Startup



# PixelSize settings

